OpenViBE-Scenario
0x8c1fc55b = 1.0
0xf36a1567 = http://openvibe.inria.fr/coadapt-p300-stimulator-tutorial/
0xf6b2e3fa = coadapt-p300-stimulator
0xf8034a49 = INRIA
Comment
  This scenario only record data for later comparisons, not of any use for actual BCI.
Comment
  This part of the scenario is responsible for showing
  the signals and the target versus non-target figures
  with confidence bound
Comment
  dumps to "data" folder from repo
Comment
  When you press 'escape' in the external application,
  it will stop it. The application send back through the
  tagging system the End of experiment stimulis (182)
  that stops the scenario.
Comment
  Temporal filtering and spatial
  filtering is done before epoching.
  Epochs are extracted based on
  the stimulation
  identifier 195 (corresponding to a flash).
  The classifier outputs the
  probability for each flash.
  This result is written in shared memory
  which is read by the p300 stimulator.
  This probability is then combined in the
  evidence accumulator module of the external
  application with the info about the symbols
  being flashed.
  It then computes the probabilities for each
  symbol and outputs the most probable one
  when a certain threshold is reached.

0xc67a01dc Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
  0x8d21ff41 = ${Player_ScenarioDirectory}/acquisition-gtec.cfg
#0.Signal stream -> Channel Selector => #1
  Channel List = ${CoAdaptP300_Channels}
  Action = Select
  Channel Matching Method = Name
Input stream 1=#0.Experiment information, Input stream 2=#1, Input stream 3=#0.Stimulations -> Identity => #2
  0xac367a9c = 65
#2.Output stream 2 -> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 15
  Pass band ripple (dB) = 0.500000
  0xac367a9c = 39
-> Signal Decimation
  Decimation factor = 4
-> xDAWN Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-spatial-filter.cfg
  0xac367a9c = 68
-> Channel Selector => #6
  Channel List = 1
  Action = Select
  Channel Matching Method = Index
Input signal=#6, Input stimulations=#2.Output stream 3 -> Stimulation based epoching => #7
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = 192
#7.Epoched signal -> Epoch variance => #8
  Averaging type = Cumulative average
  Epoch count = 4
  Significance level = 0.05
Input signal=#6, Input stimulations=#2.Output stream 3 -> Stimulation based epoching => #9
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = 191
#9.Epoched signal -> Epoch variance => #10
  Averaging type = Cumulative average
  Epoch count = 4
  Significance level = 0.05
Trigger=#2.Output stream 3, ERP1=#10.Averaged epochs, Variance1=#10.Confidence bounds, ERP2=#8.Averaged epochs, Variance2=#8.Confidence bounds -> ERP plot
  Filename final figure = ${Path_Data}/scenarios/signals/${CoAdaptP300_SubjectName}/p300_${CoAdaptP300_SubjectName}_$core{date}_$core{time}.png
  Trigger to save figure = 182
  Line color 1 = 15,81,13
  Line label 1 = target
  Line color 2 = 87,14,14
  Line label 2 = non-target
Experiment information=#2.Output stream 1, Signal=#2.Output stream 2, Stimulation=#2.Output stream 3 -> GDF file writer
  Filename = ${Player_ScenarioDirectory}/../../data/${CoAdaptP300_SubjectName}-${AcquisitionMode}-${SessionID}_$core{date}_$core{time}.gdf
#2.Output stream 2 -> Temporal filter - GPL => #13
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.500000
  0xac367a9c = 39
#2.Output stream 3 -> Stimulation Filter => #14
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = 183
  Stimulation range end = 184
Data=#13, Stimulations=#14 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#0.Stimulations -> Identity
  0xac367a9c = 65
-> Player Controller
  Stimulation name = 182
  Action to perform = Stop
