OpenViBE-Scenario

Acquisition client "openbci" => #0
  Acquisition server hostname = bci-hp.local
  Acquisition server port = 1025
#0.Signal stream -> Channel Selector "ecg channel"
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
-> Channel Rename => #2
  New channel names = ECG
-> Temporal filter => #3
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 20
  Pass band ripple (dB) = 0.5
Acquisition client "gtec" => #4
  Acquisition server hostname = bci-hp.local
  Acquisition server port = 1024
#4.Signal stream -> Channel Selector "ecg channel"
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
-> Channel Rename => #6
  New channel names = ECG
-> Temporal filter => #7
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 20
  Pass band ripple (dB) = 0.5
Clock stimulator => #8
  Interstimulation interval (in sec) = 1.0
  Stimulation = OVTK_StimulationId_Beep
Keyboard stimulator => #9
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
Input stimulations 1=#4.Stimulations, Input stimulations 2=#9, Input stimulations 3=#8 -> Stimulation multiplexer => #10
Signal=#6, Stimulation=#10 -> 0xc67a01dc GDF file writer
  Filename = ${Player_ScenarioDirectory}/../../data/gtec_ecg_record-[$core{date}-$core{time}].gdf
Data=#7, Stimulations=#10 -> Signal display "gtec"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 500
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input stimulations 1=#0.Stimulations, Input stimulations 2=#9, Input stimulations 3=#8 -> Stimulation multiplexer => #13
Signal=#2, Stimulation=#13 -> GDF file writer
  Filename = ${Player_ScenarioDirectory}/../../data/openbci_ecg_record-[$core{date}-$core{time}].gdf
Data=#3, Stimulations=#13 -> Signal display "openbci"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 500
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
