OpenViBE-Scenario
0xf36a1567 = http://openvibe.inria.fr/openvibe-p300-speller/

Acquisition client "openbci" => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
  0x8d21ff41 = ${Player_ScenarioDirectory}/acquisition-openbci.cfg
#0.Signal stream -> Channel Selector "1:8"
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Smart
-> Common Average Reference
-> Channel Rename
  New channel names = O1;P7;F7;FP1;F8;T8;P8;O2
-> Temporal filter - GPL => #4
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20
  Pass band ripple (dB) = 0.500000
  0xac367a9c = 39
Data=#4, Stimulations=#0.Stimulations -> 0xc67a01dc Signal display "obci"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
