OpenViBE-Scenario

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Rename => #1
  New channel names = AF3;AF4;F7;F3;F4;F8;FC3;FC4;C5;C6;CP3;CP4;P7;P8;PO7;PO8;event2;AFz;Fz;FCz;C3;C1;Cz;C2;C4;CPz;P3;Pz;P4;POz;O1;Oz;O2;event1
-> 0xc67a01dc Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 2
  High cut frequency (Hz) = 25
  Pass band ripple (dB) = 0.5
-> Channel Selector "1:16" => #3
  Channel List = 1:16
  Action = Select
  Channel Matching Method = Smart
#2 -> Channel Selector "18:33" => #4
  Channel List = 18:33
  Action = Select
  Channel Matching Method = Smart
Python scripting => #5
  Clock frequency (Hz) = 128
  Script = ${Player_ScenarioDirectory}/python_lsl_stims.py
  Stream type = Markers
  Stream name = MazenergyMarkers
  debug = false
Signal=#1, Stimulation=#5 -> 0xc73e83ec GDF file writer
  Filename = ${Player_ScenarioDirectory}/../data/eeg-[$core{date}-$core{time}].gdf
Data=#3, Stimulations=#5 -> Signal display "B1"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#4, Stimulations=#5 -> Signal display "B2"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
