OpenViBE-Scenario
0xf36a1567 = http://openvibe.inria.fr/openvibe-p300-speller/

Acquisition client "gtec" => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
  0x8d21ff41 = ${Player_ScenarioDirectory}/acquisition-gtec.cfg
#0.Signal stream -> Channel Rename
  New channel names = C3;Cz;C4;P3;Pz;P4;O1;O2
  0x8d21ff41 = ${Player_ScenarioDirectory}/channels-gtec.cfg
-> Channel Selector "16chans" => #2
  Channel List = C3;Cz;C4;P3;Pz;P4;O1;O2
  Action = Select
  Channel Matching Method = Name
  0x8d21ff41 = ${Player_ScenarioDirectory}/channels-selected.cfg
Python scripting => #3
  Clock frequency (Hz) = 128
  Script = ${Player_ScenarioDirectory}/python_lsl_stims.py
  Stream type = Markers
  Stream name = MazenergyMarkers
  debug = false
Input stimulations 1=#0.Stimulations, Input stimulations 2=#3 -> acquisition-lsl => #4
Input stream 1=#2, Input stream 2=#4 -> Identity => #5
Signal=#5.Output stream 1, Stimulation=#5.Output stream 2 -> GDF file writer gtec
  Filename = ${Player_ScenarioDirectory}/../../data/gtec_workload-16_record-[$core{date}-$core{time}].gdf
#5.Output stream 1 -> 0xc67a01dc Temporal filter - GPL => #7
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20
  Pass band ripple (dB) = 0.500000
  0xac367a9c = 39
Data=#7, Stimulations=#5.Output stream 2 -> Signal display "gtec"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Acquisition client "openbci" => #9
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
  0x8d21ff41 = ${Player_ScenarioDirectory}/acquisition-openbci.cfg
#9.Signal stream -> Channel Rename
  New channel names = C3;Cz;C4;P3;Pz;P4;O1;O2
  0x8d21ff41 = ${Player_ScenarioDirectory}/channels-openbci.cfg
-> Channel Selector "16chans" => #11
  Channel List = C3;Cz;C4;P3;Pz;P4;O1;O2
  Action = Select
  Channel Matching Method = Name
  0x8d21ff41 = ${Player_ScenarioDirectory}/channels-selected.cfg
Input stimulations 1=#9.Stimulations, Input stimulations 2=#3 -> acquisition-lsl => #12
Input stream 1=#11, Input stream 2=#12 -> Identity => #13
Signal=#13.Output stream 1, Stimulation=#13.Output stream 2 -> GDF file writer obci
  Filename = ${Player_ScenarioDirectory}/../../data/openbci_workload-16_record-[$core{date}-$core{time}].gdf
#13.Output stream 1 -> Temporal filter - GPL => #15
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20
  Pass band ripple (dB) = 0.500000
  0xac367a9c = 39
Data=#15, Stimulations=#13.Output stream 2 -> Signal display "obci"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
