OpenViBE-Scenario
0xf36a1567 = http://openvibe.inria.fr/openvibe-p300-speller/

Acquisition client "openbci" => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
  0x8d21ff41 = ${Player_ScenarioDirectory}/acquisition-openbci.cfg
#0.Signal stream -> 0xc67a01dc Channel Selector "1:8"
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Smart
-> 0xc67a01dc Common Average Reference
-> 0xc67a01dc Channel Rename => #3
  New channel names = O1;P7;F7;FP1;F8;T8;P8;O2
Python scripting => #4
  Clock frequency (Hz) = 128
  Script = ${Player_ScenarioDirectory}/python_lsl_stims.py
  Stream type = Markers
  Stream name = MazenergyMarkers
  debug = false
Input stimulations 1=#0.Stimulations, Input stimulations 2=#4 -> acquisition-lsl => #5
Input stream 1=#3, Input stream 2=#5 -> Identity => #6
Signal=#6.Output stream 1, Stimulation=#6.Output stream 2 -> GDF file writer obci
  Filename = ${Player_ScenarioDirectory}/../../data/openbci_workload-dry_record-[$core{date}-$core{time}].gdf
#6.Output stream 1 -> Temporal filter - GPL => #8
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20
  Pass band ripple (dB) = 0.500000
  0xac367a9c = 39
Data=#8, Stimulations=#6.Output stream 2 -> Signal display "obci"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
