OpenViBE-Scenario
0xf36a1567 = http://openvibe.inria.fr/openvibe-p300-speller/

Acquisition client "gtec" => #0
  Acquisition server hostname = bci-hp.local
  Acquisition server port = 1024
  0x8d21ff41 = ${Player_ScenarioDirectory}/acquisition-gtec.cfg
#0.Signal stream -> 0xc67a01dc Channel Rename
  New channel names = AFz;Fz;FCz;C3;C1;Cz;C2;C4;CPz;P3;Pz;P4;POz;O1;Oz;O2;event1
  0x8d21ff41 = ${Player_ScenarioDirectory}/channels-gtec.cfg
-> Channel Selector "C3;Cz;C4;P3;Pz;P4;O1;O2"
  Channel List = C3;Cz;C4;P3;Pz;P4;O1;O2
  Action = Select
  Channel Matching Method = Name
  0x8d21ff41 = ${Player_ScenarioDirectory}/channels-selected.cfg
Input stream 1=#0.Signal stream, Input stream 2=#0.Stimulations -> Identity => #3
#3.Output stream 1 -> Temporal filter => #4
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 20
  Pass band ripple (dB) = 0.5
Data=#4, Stimulations=#3.Output stream 2 -> Signal display "gtec"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 200
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false

Acquisition client "openbci" => #6
  Acquisition server hostname = bci-hp.local
  Acquisition server port = 1025
  0x8d21ff41 = ${Player_ScenarioDirectory}/acquisition-openbci.cfg
#6.Signal stream -> Channel Rename
  New channel names = C3;Cz;C4;P3;Pz;P4;O1;O2
  0x8d21ff41 = ${Player_ScenarioDirectory}/channels-openbci.cfg
-> Channel Selector "C3;Cz;C4;P3;Pz;P4;O1;O2" => #8
  Channel List = C3;Cz;C4;P3;Pz;P4;O1;O2
  Action = Select
  Channel Matching Method = Name
  0x8d21ff41 = ${Player_ScenarioDirectory}/channels-selected.cfg
Input stream 1=#8, Input stream 2=#6.Stimulations -> Identity => #9
#9.Output stream 1 -> Temporal filter => #10
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 20
  Pass band ripple (dB) = 0.5
Data=#10, Stimulations=#9.Output stream 2 -> Signal display "obci"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 200
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
