OpenViBE-Scenario
0xf36a1567 = http://openvibe.inria.fr/openvibe-p300-speller/
Comment
  packmyboxw

  ithfivedoz

  enliquorjugs

  packmyboxwithfivedozenliquorjugs
Comment
  The use of these P300 examples are described in

  http://openvibe.inria.fr/openvibe-p300-speller/

  with important notes about timing in

  http://openvibe.inria.fr/using-the-p300-scenarios-inside-openvibe/

Keyboard stimulator => #0
  Filename = ${Player_ScenarioDirectory}/simple-keyboard-to-stimulations.txt
-> 0xc67a01dc P300 Speller Stimulator => #1
  Start stimulation = OVTK_StimulationId_TrialStart
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Number of rows = 6
  Number of columns = 6
  Number of repetitions = 12
  Number of trials = 32
  Flash duration (in sec) = 0.200000
  No flash duration (in sec) = 0.100000
  Inter-repetition delay (in sec) = 1.000000
  Inter-trial delay (in sec) = 3.000000
  Avoid neighbor flashing = false
-> Target Letter Generation => #2
  Lua Script = ${Player_ScenarioDirectory}/p300-speller-target.lua
  Word to Spell (leave this empty if random) = packmyboxwithfivedozenliquorjugs
  Row Stimulation Base = OVTK_StimulationId_Label_01
  Column Stimulation Base = OVTK_StimulationId_Label_07
  Delay Before Sending (in sec) = 2
Sequence stimulations=#1, Target stimulations=#2 -> P300 Speller Visualisation => #3
  Interface filename = ${Path_Data}/plugins/simple-visualisation/p300-speller.ui
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Flash background color = 5,5,5
  Flash foreground color = 100,100,100
  Flash font size = 60
  No flash background color = 0,0,0
  No flash foreground color = 25,25,25
  No flash font size = 40
  Target background color = 20,20,70
  Target foreground color = 10,10,30
  Target font size = 40
  Selected background color = 10,40,10
  Selected foreground color = 60,100,60
  Selected font size = 40
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-speller-visualisation.cfg
Input stimulations 1=#0, Input stimulations 2=#1, Input stimulations 3=#2, Input stimulations 4=#3 -> p300 stims => #4
Acquisition client "gtec" => #5
  Acquisition server hostname = bci-hp.local
  Acquisition server port = 1024
  0x8d21ff41 = ${Player_ScenarioDirectory}/acquisition-gtec.cfg
#5.Signal stream -> Channel Rename
  New channel names = AFz;Fz;FCz;C3;C1;Cz;C2;C4;CPz;P3;Pz;P4;POz;O1;Oz;O2;event1
  0x8d21ff41 = ${Player_ScenarioDirectory}/channels-gtec.cfg
-> Channel Selector "16chans" => #7
  Channel List = AFz;Fz;FCz;C3;C1;Cz;C2;C4;CPz;P3;Pz;P4;POz;O1;Oz;O2
  Action = Select
  Channel Matching Method = Name
  0x8d21ff41 = ${Player_ScenarioDirectory}/channels-selected.cfg
Input stimulations 1=#5.Stimulations, Input stimulations 2=#4 -> acquisition-p300 => #8
Input stream 1=#7, Input stream 2=#8 -> Identity => #9
Signal=#9.Output stream 1, Stimulation=#9.Output stream 2 -> GDF file writer gtec
  Filename = ${Player_ScenarioDirectory}/../../data/gtec_p300-16_record-[$core{date}-$core{time}].gdf
#9.Output stream 1 -> Temporal filter - GPL => #11
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 15
  Pass band ripple (dB) = 0.500000
  0xac367a9c = 39
Data=#11, Stimulations=#9.Output stream 2 -> Signal display "gtec"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 200
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#11 -> Signal Decimation
  Decimation factor = 4
-> Channel Selector "11" => #14
  Channel List = 11
  Action = Select
  Channel Matching Method = Index
Input signal=#14, Input stimulations=#9.Output stream 2 -> Stimulation based epoching => #15
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Target
#15.Epoched signal -> Epoch variance => #16
  Averaging type = Cumulative average
  Epoch count = 4
  Significance level = 0.05
Input signal=#14, Input stimulations=#9.Output stream 2 -> Stimulation based epoching => #17
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_NonTarget
#17.Epoched signal -> Epoch variance => #18
  Averaging type = Cumulative average
  Epoch count = 4
  Significance level = 0.05
Trigger=#9.Output stream 2, ERP1=#16.Averaged epochs, Variance1=#16.Confidence bounds, ERP2=#18.Averaged epochs, Variance2=#18.Confidence bounds -> ERP plot gtec
  Filename final figure = ${Player_ScenarioDirectory}/../../data/p300-16_gtec_$core{date}_$core{time}.png
  Trigger to save figure = OVTK_StimulationId_Target
  Line color 1 = 15,81,13
  Line label 1 = target
  Line color 2 = 87,14,14
  Line label 2 = non-target
Acquisition client "openbci" => #20
  Acquisition server hostname = bci-hp.local
  Acquisition server port = 1025
  0x8d21ff41 = ${Player_ScenarioDirectory}/acquisition-openbci.cfg
#20.Signal stream -> Channel Rename
  New channel names = AFz;Fz;FCz;C3;C1;Cz;C2;C4;CPz;P3;Pz;P4;POz;O1;Oz;O2;aux1;aux2;aux3
  0x8d21ff41 = ${Player_ScenarioDirectory}/channels-openbci.cfg
-> Channel Selector "16chans" => #22
  Channel List = AFz;Fz;FCz;C3;C1;Cz;C2;C4;CPz;P3;Pz;P4;POz;O1;Oz;O2
  Action = Select
  Channel Matching Method = Name
  0x8d21ff41 = ${Player_ScenarioDirectory}/channels-selected.cfg
Input stimulations 1=#20.Stimulations, Input stimulations 2=#4 -> acquisition-p300 => #23
Input stream 1=#22, Input stream 2=#23 -> Identity => #24
Signal=#24.Output stream 1, Stimulation=#24.Output stream 2 -> GDF file writer obci
  Filename = ${Player_ScenarioDirectory}/../../data/openbci_p300-16_record-[$core{date}-$core{time}].gdf
#24.Output stream 1 -> Temporal filter - GPL => #26
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 15
  Pass band ripple (dB) = 0.500000
  0xac367a9c = 39
Data=#26, Stimulations=#24.Output stream 2 -> Signal display "obci"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 200
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#26 -> Channel Selector "11" => #28
  Channel List = 11
  Action = Select
  Channel Matching Method = Index
Input signal=#28, Input stimulations=#24.Output stream 2 -> Stimulation based epoching => #29
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Target
#29.Epoched signal -> Epoch variance => #30
  Averaging type = Cumulative average
  Epoch count = 4
  Significance level = 0.05
Input signal=#28, Input stimulations=#24.Output stream 2 -> Stimulation based epoching => #31
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_NonTarget
#31.Epoched signal -> Epoch variance => #32
  Averaging type = Cumulative average
  Epoch count = 4
  Significance level = 0.05
Trigger=#24.Output stream 2, ERP1=#30.Averaged epochs, Variance1=#30.Confidence bounds, ERP2=#32.Averaged epochs, Variance2=#32.Confidence bounds -> ERP plot obci
  Filename final figure = ${Player_ScenarioDirectory}/../../data/p300-16_openbci_$core{date}_$core{time}.png
  Trigger to save figure = OVTK_StimulationId_Target
  Line color 1 = 15,81,13
  Line label 1 = target
  Line color 2 = 87,14,14
  Line label 2 = non-target
